PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = tutorial3
  keyboardBackend = ioHub
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Routines
  Routine trial_5
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = C
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent distractors
      color [set every repeat] = red
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_2
      color [set every repeat] = red
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_3
      color [set every repeat] = red
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_4
      color [set every repeat] = yellow
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_5
      color [set every repeat] = yellow
      letterHeight = 0.08
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_6
      color [set every repeat] = yellow
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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  Routine trial_10
    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent target_2
      color [set every repeat] = $color
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = C
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    MouseComponent mouse_2
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent distractors_7
      color [set every repeat] = yellow
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_8
      color [set every repeat] = yellow
      letterHeight = 0.07
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_9
      color [set every repeat] = yellow
      letterHeight = 0.08
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_10
      color [set every repeat] = yellow
      letterHeight = 0.09
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_11
      color [set every repeat] = yellow
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_12
      color [set every repeat] = red
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_13
      color [set every repeat] = red
      letterHeight = 0.09
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_14
      color [set every repeat] = red
      letterHeight = 0.08
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_16
      color [set every repeat] = red
      letterHeight = 0.07
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    TextComponent distractors_15
      color [set every repeat] = red
      letterHeight = 0.06
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = colorcondition.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'color': 'orange'},
      {'color': 'blue'}]
    Routine trial_5
    Routine trial_10
  LoopTerminator trials
